#pragma once
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace ISWAP_PLATEANDLIDMOVEMENT {
  function MoveLid( sequence lid_from_seq, sequence lid_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function MoveLid( sequence lid_from_seq, sequence lid_to_seq, variable var_ParkAfterMove, variable inverse_grip, device & STAR ) void {
    private variable x_acceleration;
    private variable check_lid_on_put;
    private variable grip_opening;
    private variable plate_press;
    private variable z_speed;
    private variable check_lid_on_get;
    private variable grip_width;
    private variable grip_speed;
    private variable grip_force;
    private variable grip_height;
    grip_height = 4;
    grip_width = 84.5;
    grip_opening = 88;
    grip_force = 7;
    STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    if (var_ParkAfterMove == 1)
    {
      STAR._86F668D0_478C_41b6_A78B_8B6B8EAA54A7("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"); // ParkISwap
    }
  }
} // library namespace
